PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Auditory
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Routines
  Routine Instruction1_1
    TextComponent phase1instruction
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hazır olup, ekrandaki butona dokunduktan sonra bir bip sesi duyacaksınız. Hemen ardından  yaklaşık 20sn boyunca bir nesneye dokunma sesleri duyacaksınız. İkinci bir bip sesi duyduktan sonra tekrar boşluk tuşuna basmanız ve bir sonraki ekranda çıkacak sıfatları dinlediğiniz seslerde hissettiklerinize göre değerlendirmeniz beklenmektedir
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent isReady
      letterHeight = 0.04
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hazırsanız başlamak için butona basınız
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      save = none
      saveStartStop = False
      size = 0.5,0.09 
      startVal [time (s)] = 0
      text =         Başla
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  Routine beep
    SoundComponent BeepSound
      sound = Sounds\01_beep.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    VariableComponent wait
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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  Routine Ratings
    CodeComponent endRoutine
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        continueRoutine = True
      Each Frame:
        if not continueRoutine:  # a component has requested a forced-end of Routine
            break
        continueRoutine = False  # will revert to True if at least one component still running
        for thisComponent in RatingsComponents:
            if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                continueRoutine = True
                break  # at least one component has not yet finished

        if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                    win.flip()
      End Routine:
        if adjective_0.getRating() is not None and  adjective_1.getRating() is not None and  adjective_2.getRating() is not None and  adjective_3.getRating() is not None and  adjective_4.getRating() is not None and  adjective5.getRating() is not None and  adjective_6.getRating() is not None and  adjective_7.getRating() is not None and  adjective_8.getRating() is not None and  adjective_9.getRating() is not None:
            continueRoutine = False
    CodeComponent unnecessary
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        for i in range(1,4):
            adj=eval("AdjRating_"+str(i))
            if adj.markerPos:
                colorSpace='rgb1'
                if adj.markerPos<0:
                    adj.fillColor = [-adj.markerPos/100,adj.markerPos/100,adj.markerPos/100]
                elif adj.markerPos>0:
                    adj.fillColor = [adj.markerPos/100,-adj.markerPos/100,-adj.markerPos/100]
    CodeComponent adjectives
      Code Type = Auto->JS
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      Each Frame:
        leftAdjList=['Tanecikli','Nemli','Esnek','Sert','Dayanıklı','Pürüzlü','Kabarık','Sıcak','Ucuz','Doğal']
        rightAdjList=['Bütün','Kuru','Esnemez','Yumuşak','Dayanıksız','Pürüzsüz','Basık','Soğuk','Pahalı','Yapay']
        for i in range(10):
            #k=(i+b)%10
            k=posListe[i]
            leftText = visual.TextStim(win=win, name=leftAdjList[i],
                text=leftAdjList[i],
                font='Open Sans',
                pos=(-0.760, (0.4625-(k*0.1))), height=0.025, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-5.0);
            rightText = visual.TextStim(win=win, name=rightAdjList[i],
                text=rightAdjList[i],
                font='Open Sans',
                pos=(0.760, 0.4625-(k*0.1)), height=0.025, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-5.0);
            if leftText.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
                leftText.draw()
            if rightText.status == NOT_STARTED:
                rightText.draw()
    CodeComponent scales
      Code Type = Auto->JS
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      Begin Experiment:
        def audioRatingfunc(i):
            vars()["adjective_"+str(i)]= visual.Slider(win=win, name="adjective_"+str(i),
            size=(1.29, 0.04), pos=(0, 0.461-(i*0.1)), units=None,
            labels=["-100","-50","0","+50","+100"], ticks=(-100,-50,0,50,100), granularity=0.0,
            style='slider', styleTweaks=(), opacity=None,
            color=(1.0000, 0.9608, 0.9608), fillColor=(1.0000, -0.0039, -0.3725), borderColor=(0.8824, 1.0000, 1.0000), colorSpace='rgb',
            font='Open Sans', labelHeight=0.020,
            flip=False, depth=0, readOnly=False)
            return eval("adjective_"+str(i))
        for i in range(10):
            vars()["adjective_"+str(i)]=audioRatingfunc(i)
      Begin Routine:
        b=randint(0,10)
        posListe=list(range(10))
        shuffle(posListe)
        Adj=[]
        for x in range(10):
            k=posListe[x]
            eval("adjective_"+str(x)).reset()
            Adj.append(eval("adjective_"+str(x)))
            eval("adjective_"+str(x)).pos=(0,0.461-(k*0.1))

        for thisComponent in Adj:
            thisComponent.tStart = None
            thisComponent.tStop = None
            thisComponent.tStartRefresh = None
            thisComponent.tStopRefresh = None
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED
      Each Frame:
        RatingsComponents=Adj
        for i in range(10):
            if eval("adjective_"+str(i)).status==NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
                # keep track of start time/frame for later
                eval("adjective_"+str(i)).frameNStart = frameN  # exact frame index
                eval("adjective_"+str(i)).tStart = t  # local t and not account for scr refresh
                eval("adjective_"+str(i)).tStartRefresh = tThisFlipGlobal  # on global time
                win.timeOnFlip(eval("adjective_"+str(i)), 'tStartRefresh')  # time at next scr refresh
                eval("adjective_"+str(i)).setAutoDraw(True)

        if adjective_0.getRating() is not None and  adjective_1.getRating() is not None and  adjective_2.getRating() is not None and  adjective_3.getRating() is not None and  adjective_4.getRating() is not None and  adjective_5.getRating() is not None and  adjective_6.getRating() is not None and  adjective_7.getRating() is not None and  adjective_8.getRating() is not None and  adjective_9.getRating() is not None:
            continueRoutine = False
      End Routine:
        for i in range(10):
            vars()["adjective_"+str(i)]
            SoundTrials.addData('adjective_'+str(i)+'.response',eval("adjective_"+str(i)).getRating())
        for thisComponent in Adj:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
  Routine Stimuli_Presentation
    SoundComponent sound_1
      sound [set every repeat] = $soundsFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 19
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  Routine blank
    ButtonComponent next_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      save = none
      saveStartStop = False
      size = 0.5,0.09 
      startVal [time (s)] = 0
      text =         Devam
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  Routine end_message
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Deneyimizin ilk aşaması bitmiştir. Diğer aşamaya geçmek için araştırmacı ile irtibata geçiniz.
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    ButtonComponent end_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      save = none
      saveStartStop = False
      size = 0.5,0.09 
      startVal [time (s)] = 0
      text =         Bitir
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Flow
  Routine Instruction1_1
  LoopInitiator SoundTrials loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('soundsFile', 'baggies.wav'), ('Objects', 'baggies')]),
      OrderedDict([('soundsFile', 'sugar.wav'), ('Objects', 'sugar')]),
      OrderedDict([('soundsFile', 'metal_screw.wav'), ('Objects', 'metal_screw')]),
      OrderedDict([('soundsFile', 'carton.wav'), ('Objects', 'carton')]),
      OrderedDict([('soundsFile', 'wet_cloth.wav'), ('Objects', 'wet_cloth')]),
      OrderedDict([('soundsFile', 'stones.wav'), ('Objects', 'stones')]),
      OrderedDict([('soundsFile', 'papers.wav'), ('Objects', 'papers')]),
      OrderedDict([('soundsFile', 'water.wav'), ('Objects', 'water')]),
      OrderedDict([('soundsFile', 'shaving_cream.wav'), ('Objects', 'shaving_cream')]),
      OrderedDict([('soundsFile', 'rice.wav'), ('Objects', 'rice')]),
      OrderedDict([('soundsFile', 'fur.wav'), ('Objects', 'fur')]),
      OrderedDict([('soundsFile', 'wooden_baals.wav'), ('Objects', 'wooden_baals')])]
    Routine beep
    Routine Stimuli_Presentation
    Routine Ratings
    Routine blank
  LoopTerminator SoundTrials
  Routine end_message
